PsychoPy2experiment version="2026.1.0"
Settings
  expName = ldt
  runMode = 0
  Experiment info = {"participant":"'1'","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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  Routine instructions
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    TextComponent instructionText
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        Look at the UPPERCASE target.

        Press F if it is a word.
        Press J if it is a nonword.

        Press SPACE to begin.
    KeyboardComponent beginKey
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = ['space']
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Flow
  Routine instructions
  Routine trial
